PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [300, 500]
  expName = list_pa
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Routines
  Routine trial
    SoundComponent sound_exposure
      durationEstim = 0.8
      sound [set every repeat] = $word_stimuli
      startVal [time (s)] = $isi
      stopVal [duration (s)] = 0.8
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  Routine break_2
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $countdown
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    LoopInitiator trial_loop loopType="TrialHandler"
      conditionsFile = stimuli.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/droite.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/droite.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/droite.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/droite.ogg', 'isi': 0.7},
        {'word_stimuli': 'sounds/droite.ogg', 'isi': 0.7}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
      Routine trial
    LoopTerminator trial_loop
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = countdown.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'countdown': 30},
        {'countdown': 29},
        {'countdown': 28},
        {'countdown': 27},
        {'countdown': 26},
        {'countdown': 25},
        {'countdown': 24},
        {'countdown': 23},
        {'countdown': 22},
        {'countdown': 21},
        {'countdown': 20},
        {'countdown': 19},
        {'countdown': 18},
        {'countdown': 17},
        {'countdown': 16},
        {'countdown': 15},
        {'countdown': 14},
        {'countdown': 13},
        {'countdown': 12},
        {'countdown': 11},
        {'countdown': 10},
        {'countdown': 9},
        {'countdown': 8},
        {'countdown': 7},
        {'countdown': 6},
        {'countdown': 5},
        {'countdown': 4},
        {'countdown': 3},
        {'countdown': 2},
        {'countdown': 1},
        {'countdown': 0}]
      Routine break_2
    LoopTerminator trials_2
  LoopTerminator trials
